PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '000', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = time_exp
  keyboardBackend = ioHub
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Routines
  Routine Welcome
    TextComponent textWelcomeMessage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        歡迎來到本次的實驗

        請按"空白鍵"開始實驗
    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
    TextComponent textEndMessage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text:
        本次實驗到此結束

        感謝您的參與
    KeyboardComponent keyEnd
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine blank_1000
    TextComponent textblank1000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    SoundComponent sound_1
      sound [set every repeat] = sound/trueding.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine pic
    ImageComponent emopic
      image [set every repeat] = $emo_pic
      size [set every repeat] = (0.7, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
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    ImageComponent redstar
      image = redstar.png
      pos [set every repeat] = (posx,posy)
      size = (0.2, 0.2)
      startVal [time (s)] = $starduration
      stopVal [duration (s)] = 1.0
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  Routine reproduction_stop
    TextComponent textreproductionend
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        時間再製作業
        請按空白鍵開始計時
        再次按下空白鍵停止計時.
    KeyboardComponent key_stop
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine estimation
    TextComponent textreproductionstart
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        時間估計作業
        請透過滑鼠將刺激呈現時間點在以下量尺中
        按下空白鍵進入下一題
    SliderComponent scale
      forceEndRoutine = False
      granularity = 0
      labels = '0','1','2','3','4','5','6','7','8','9','10','11','12','13','14','15'
      letterHeight = 0.04
      pos = (0, -0.2)
      size = (1.2, 0.04)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15)
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    KeyboardComponent key_next
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest
    TextComponent textrest
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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      text:
        休息一分鐘

        時間結束會自動進入下一題
    TextComponent textready
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text = 即將進入下一題
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Flow
  Routine Welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = pic_condition_2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'emo_pic': 'C:\\Users\\user\\Desktop\\time_exp\\emo_pic\\EBPgLdJe_400x400.png', 'duration': 1, 'pos': [0, -0.3], 'starduration': 0.1384903},
      {'emo_pic': 'C:\\Users\\user\\Desktop\\time_exp\\emo_pic\\FBgs1RAVEAAo9TV.jpg', 'duration': 3, 'pos': [0, 0.3], 'starduration': 0.1552196},
      {'emo_pic': 'C:\\Users\\user\\Desktop\\time_exp\\emo_pic\\rdt-20210516-0143118280534424875981353.jpg', 'duration': 5, 'pos': [0.3, 0], 'starduration': 0.1152479},
      {'emo_pic': 'C:\\Users\\user\\Desktop\\time_exp\\emo_pic\\S__42811412.jpg', 'duration': 7, 'pos': [0, 0.3], 'starduration': 0.0561269}]
    Routine blank_1000
    Routine pic
    Routine estimation
    Routine rest
  LoopTerminator trials
  Routine End
